{load_file("ch3ppchannel.ses")}
objref tobj
tobj = new List("ChannelBuild")
ch3pp_cbindex_ = tobj.count-1
objref tobj

begintemplate ExperimentalModelContext
public soma1, ch, stim, record, setseed
create soma1
objref ch, stim, cb, this
external ch3pp_cbindex_, ChannelBuild

proc init() {localobj s
	s = new String()
	cb = ChannelBuild[ch3pp_cbindex_]
	sprint(s.s, "ch = new %s(.5)", cb.ks.name)
	soma1 {
		ch = new ch3pp(.5)
		ch.Nsingle = $1
		stim = new SEClamp(.5)
		stim.dur1 = 1e9
		stim.amp1 = 20
		stim.rs = .1
	}
}

proc record() {
	$o1.record(&ch.O, $o2)
}

proc setseed() {
	cb.ks.rseed($1*100000)
}

endtemplate ExperimentalModelContext

obfunc experimentalDataGenerator() { local sav localobj m, tvec, ov, nil, ff, xmd, ymd
	if (numarg() > 3 ) ff = $o4 // fitness function
	xmd = new Vector()
	ymd = new Vector()
	xmd.indgen(0,tstop,0.1)

	m = new ExperimentalModelContext($1)
	ov = new Vector()
	m.record(ov, $o3)
	m.record(ymd, xmd)
        sav = cvode.active()
        cvode.active(0)
	dt = 0.025
        finitialize(v_init)
	m.setseed($2)
	run()
	// for some reason the BG/P clears ymd and ov when m is destroyed
	ymd = ymd.c()
	ov = ov.c()
        m = nil
        cvode.active(sav)
        finitialize()
	ymd.mul(1/$1)
	if (ff != nil) {
		sav = ff.n_chdat
		ff.set_data(xmd,ymd)
		execute("setxy()", ff)
//		ff.n_chdat = sav
	}
	return ov.mul(1/$1)
}

proc test() {localobj vv, tvec, pvec
	pvec = new Vector(0)
	pvec.append($3, $4)
	tvec = new Vector()
	tvec.indgen(0,tstop,.1)
	vv = experimentalDataGenerator($1, $2, tvec)
	vv.printf()
}

//test(1000, 1, 4, 2)

